/*
*/
{load_file("stdrun.hoc")}
{load_file("import3d.hoc")}
/*
 * Check that global parameters are the same as with the optimization
 */
proc check_parameter(/* name, expected_value, value */){
  strdef error
  if($2 != $3){
    sprint(error, "Parameter %s has different value %f != %f", $s1, $2, $3)
    execerror(error)
  }
}
proc check_simulator() {
  check_parameter("celsius", 34.0, celsius)
}

begintemplate stochkv3_cell
  public init, morphology, geom_nseg_fixed, geom_nsec, gid
  public channel_seed, channel_seed_set
  public soma, dend, apic, axon, myelin
  create soma[1], dend[1], apic[1], axon[1], myelin[1]

  objref this, CellRef, segCounts

  public all, somatic, apical, axonal, basal, myelinated, APC
  objref all, somatic, apical, axonal, basal, myelinated, APC

obfunc getCell(){
        return this
}

proc init(/* args: morphology_dir, morphology_name */) {
  all = new SectionList()
  apical = new SectionList()
  axonal = new SectionList()
  basal = new SectionList()
  somatic = new SectionList()
  myelinated = new SectionList()

  //gid in this case is only used for rng seeding
  gid = 0

  //For compatibility with BBP CCells
  CellRef = this

  forall delete_section()

  if(numarg() >= 2) {
    load_morphology($s1, $s2)
  } else {
    load_morphology($s1, "simple.swc")
  }

  geom_nseg()
  insertChannel()
  biophys()

  // Initialize channel_seed_set to avoid accidents
  channel_seed_set = 0
  // Initialize random number generators
  re_init_rng()
}

proc load_morphology(/* morphology_dir, morphology_name */) {localobj morph, import, sf, extension
  strdef morph_path
  sprint(morph_path, "%s/%s", $s1, $s2)

  sf = new StringFunctions()
  extension = new String()

  sscanf(morph_path, "%s", extension.s)
  sf.right(extension.s, sf.len(extension.s)-4)

  if( strcmp(extension.s, ".asc") == 0 ) {
    morph = new Import3d_Neurolucida3()
  } else if( strcmp(extension.s, ".swc" ) == 0) {
    morph = new Import3d_SWC_read()
  } else {
    printf("Unsupported file format: Morphology file has to end with .asc or .swc" )
    quit()
  }

  morph.quiet = 1
  morph.input(morph_path)

  import = new Import3d_GUI(morph, 0)
  import.instantiate(this)
}

/*
 * Assignment of mechanism values based on distance from the soma
 * Matches the BluePyOpt method
 */
proc distribute_distance(){local x localobj sl
  strdef stmp, distfunc, mech

  sl = $o1
  mech = $s2
  distfunc = $s3
  this.soma[0] distance(0, 0.5)
  sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
    // use distance(x) twice for the step distribution case, e.g. for calcium hotspot
    sprint(stmp, distfunc, secname(), x, distance(x), distance(x))
    execute(stmp)
  }
}

proc geom_nseg() {
  this.geom_nsec() //To count all sections
  //TODO: geom_nseg_fixed depends on segCounts which is calculated by
  //  geom_nsec.  Can this be collapsed?
  this.geom_nseg_fixed(40)
  this.geom_nsec() //To count all sections
}

proc insertChannel() {
  forsec this.all {
  }
  forsec this.apical {
  }
  forsec this.axonal {
  }
  forsec this.basal {
  }
  forsec this.somatic {
    insert pas
    insert StochKv3
  }
  forsec this.myelinated {
  }
}

proc biophys() {
  
  forsec CellRef.all {
  }
  
  forsec CellRef.apical {
  }
  
  forsec CellRef.axonal {
  }
  
  forsec CellRef.basal {
  }
  
  forsec CellRef.somatic {
    e_pas = -90
    gkbar_StochKv3 = 0.5
  }
  
  forsec CellRef.myelinated {
  }
  
}

func sec_count(/* SectionList */) { local nSec
  nSec = 0
  forsec $o1 {
      nSec += 1
  }
  return nSec
}

/*
 * Iterate over the section and compute how many segments should be allocate to
 * each.
 */
proc geom_nseg_fixed(/* chunkSize */) { local secIndex, chunkSize
  chunkSize = $1
  soma area(.5) // make sure diam reflects 3d points
  secIndex = 0
  forsec all {
    nseg = 1 + 2*int(L/chunkSize)
    segCounts.x[secIndex] = nseg
    secIndex += 1
  }
}

/*
 * Count up the number of sections
 */
proc geom_nsec() { local nSec
  nSecAll = sec_count(all)
  nSecSoma = sec_count(somatic)
  nSecApical = sec_count(apical)
  nSecBasal = sec_count(basal)
  nSecMyelinated = sec_count(myelinated)
  nSecAxonalOrig = nSecAxonal = sec_count(axonal)

  segCounts = new Vector()
  segCounts.resize(nSecAll)
  nSec = 0
  forsec all {
    segCounts.x[nSec] = nseg
    nSec += 1
  }
}

/*
 * Replace the axon built from the original morphology file with a stub axon
 */



func hash_str() {localobj sf strdef right
  sf = new StringFunctions()

  right = $s1

  n_of_c = sf.len(right)

  hash = 0
  char_int = 0
  for i = 0, n_of_c - 1 {
     sscanf(right, "%c", & char_int)
     hash = (hash * 31 + char_int) % (2 ^ 31 - 1)
     sf.right(right, 1)
  }

  return hash
}

proc re_init_rng() {localobj sf
    strdef full_str, name

    sf = new StringFunctions()

    if(numarg() == 1) {
        // We received a third seed
        channel_seed = $1
        channel_seed_set = 1
    } else {
        channel_seed_set = 0
    }

    forsec somatic {
        for (x, 0) {
            setdata_StochKv3(x)
            sf.tail(secname(), "\\.", name)
            sprint(full_str, "%s.%.19g", name, x)
            if (channel_seed_set) {
                setRNG_StochKv3(gid, hash_str(full_str), channel_seed)
            } else {
                setRNG_StochKv3(gid, hash_str(full_str))
            }
        }
    }

}


endtemplate stochkv3_cell